CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\/](?P<Plate>[^\\/]+)[\\/](?P<Well>[A-Za-z][0-9]{2})(?P<ID>[^\\/]+)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:HEslice
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:ID

UnmixColors:[module_num:5|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
    Stain count:1
    Select the input color image:HEslice
    Name the output image:Hematoxylin
    Stain:Ponceau-fuchsin
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Hematoxylin
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:IdentifyPrimaryObjects
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:Hematoxylin
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.5
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:8|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
    Select object sets to measure:IdentifyPrimaryObjects, IdentifySecondaryObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureTexture:[module_num:9|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
    Select images to measure:Hematoxylin
    Select objects to measure:IdentifySecondaryObjects, IdentifyPrimaryObjects
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureObjectIntensity:[module_num:10|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
    Select images to measure:Hematoxylin
    Select objects to measure:IdentifyPrimaryObjects, IdentifySecondaryObjects

MeasureObjectIntensityDistribution:[module_num:11|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
    Select images to measure:Hematoxylin
    Hidden:2
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes only
    Maximum zernike moment:9
    Select objects to measure:IdentifyPrimaryObjects
    Object to use as center?:These objects
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    Select objects to measure:IdentifySecondaryObjects
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|Desktop\\yzh\\software\\cellprofiler_case
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:lung_cancer
    Overwrite existing files without warning?:Yes
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